PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[1,1,1]
  expName = H05-WorkingMemory
  logging level = debug
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Routines
  Routine trial
    CodeComponent time_0
      Code Type = Auto->JS
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      Begin Routine:
        startTime = globalClock.getTime()
    ImageComponent BKS
      image [set every repeat] = $Beginning_Background
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Beginning_Background_duration
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    ImageComponent BK
      image [set every repeat] = $StimulusBackground
      size = (2, 1)
      startVal [time (s)] = $StimulusBackgroundStart
      stopVal [duration (s)] = $StimulusBackgroundDuration
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    ImageComponent St
      image [set every repeat] = $Stimulus
      pos [set every repeat] = $StimulusPosition
      size [set every repeat] = $StimulusSize
      startVal [time (s)] = $StimulusStart
      stopVal [duration (s)] = $StimulusDuration
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    ImageComponent DBK
      image [set every repeat] = $DelayBackground
      size = (2, 1)
      startVal [time (s)] = $DelayBackgroundStart
      stopVal [duration (s)] = $DelayBackgroundDuration
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    ImageComponent DBSt
      image [set every repeat] = $DelayStimulusBackground
      size = (2, 1)
      startVal [time (s)] = $DelayStimulusBackgroundstart
      stopVal [duration (s)] = $DelayStimulusBackgroundDuration
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    ImageComponent DSt
      image [set every repeat] = $DelayStimulus
      pos [set every repeat] = $DelayStimulusPosition
      size [set every repeat] = $StimulusSize
      startVal [time (s)] = $DelayStimulusStart
      stopVal [duration (s)] = $DelayStimulusDuration
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    ImageComponent RBK
      image [set every repeat] = $ResponseBackground
      size = (2, 1)
      startVal [time (s)] = $ResponseBackgroundStart
      stopVal [duration (s)] = $ResponseBackgroundDuration
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    ImageComponent RBSt
      image [set every repeat] = $ResponseBackgroundStimulus
      size = (2, 1)
      startVal [time (s)] = $ResponseBackgroundStimulusStart
      stopVal [duration (s)] = $ResponseBackgroundStimulusDuration
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    ImageComponent RSt
      image [set every repeat] = $ResponseStimulus
      pos [set every repeat] = $ResponseStimulusPosition
      size [set every repeat] = $StimulusSize
      startVal [time (s)] = $ResponseStimulusStart
      stopVal [duration (s)] = $ResponseStimulusDuration
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    KeyboardComponent KR
      allowedKeys = 'left','right'
      correctAns = $ResponseKey
      forceEndRoutine = True
      startVal [time (s)] = $ResponseKeyStart
      stopVal [duration (s)] = $ResponseKeyDuration
      storeCorrect = True
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  Routine welcome
    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        Welcome!
        Through the next slides you will find a description of the activities that you will do during the session.

        (Press spacebar when you are ready)
    KeyboardComponent w_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine Walkthrough
    TextComponent WK_inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $instruction
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    ImageComponent WK_BK
      image [set every repeat] = $StimulusBackground
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $StimulusBackgroundDuration
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    ImageComponent WK_ST
      image [set every repeat] = $Stimulus
      pos [set every repeat] = $StimulusPosition
      size = $StimulusSize
      startVal [time (s)] = $StimulusStart
      stopVal [duration (s)] = $StimulusDuration
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    ImageComponent WK_DBK
      image [set every repeat] = $DelayBackground
      size = (2, 1)
      startVal [time (s)] = $DelayBackgroundStart
      stopVal [duration (s)] = $DelayBackgroundDuration
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    ImageComponent WK_DSt
      image [set every repeat] = $DelayStimulus
      pos = $DelayStimulusPosition
      size = $StimulusSize
      startVal [time (s)] = $DelayStimulusStart
      stopVal [duration (s)] = $DelayStimulusDuration
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    ImageComponent WK_RBK
      image [set every repeat] = $ResponseBackground
      size = (2, 1)
      startVal [time (s)] = $ResponseBackgroundStart
      stopVal [duration (s)] = $ResponseBackgroundDuration
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    ImageComponent WK_RSt
      flipHoriz = True
      image [set every repeat] = $ResponseStimulus
      pos = $ResponseStimulusPosition
      size = $StimulusSize
      startVal [time (s)] = $ResponseStimulusStart
      stopVal [duration (s)] = $ResponseStimulusDuration
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    ImageComponent WK_IT
      image = $IntertrialBackground
      size = (2, 1)
      startVal [time (s)] = $IntertrialStart
      stopVal [duration (s)] = $IntertrialDuration
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  Routine walkthrough_inst
    TextComponent wt_instructions1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
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      text:
        The activity consist on press a key depending on the relationship signaled by the background.
    TextComponent wt_instructions2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 11
      stopVal [duration (s)] = 9
      text = If the answer is correct you will listen to the following sound:
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    SoundComponent wt_instructions1_FB
      sound = CorrectSound.wav
      startVal [time (s)] = 15
      stopVal [duration (s)] = 3
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    TextComponent wt_instructions3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 21
      stopVal [duration (s)] = 9
      text = If the answer is wrong you will listen to the following sound:
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    SoundComponent wt_instructions2_FB
      sound = WrongSound.wav
      startVal [time (s)] = 25
      stopVal [duration (s)] = 3
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    TextComponent wt_instructions4_FB
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 31
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      text:
        Now you will learn the relationships

        (Press the spacebar to continue)
    KeyboardComponent wt_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 32
      store = nothing
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  Routine video
    ImageComponent image
      image [set every repeat] = $StimulusBackgroundWT
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text [set every repeat] = $TextWT1
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $videoWT
      startVal [time (s)] = 10
      stopVal [duration (s)] = VideoWTDuration
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    KeyboardComponent key_respWT
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = key_respWTStart
      store = nothing
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    TextComponent text_3
      color = black
      letterHeight = 0.04
      pos = (0, -.387)
      startVal [time (s)] = TextWT2Start
      text [set every repeat] = $TextWT2
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  Routine endWT
    TextComponent endWTtext
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue
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    KeyboardComponent key_respEndWT
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine Trial_Start
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press spacebar when you are ready
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if KR.corr:
            playsound = "CorrectSound.wav"
        else:
                playsound = "WrongSound.wav"
    SoundComponent sound_1
      saveStartStop = False
      sound [set every repeat] = $playsound
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  Routine it
    ImageComponent It_trial
      image [set every repeat] = $IntertrialBackground
      size = (2, 1)
      stopVal [duration (s)] = $IntertrialDuration
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  Routine rest
    TextComponent rest_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have reached half of the session.
        You can stretch your legs and rest your eyes for 2 minutes, before continuing.

        (Press spacebar when you are ready)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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  Routine end
    TextComponent end_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for your participation!

        (Press spacebar)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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  Routine re_inst
    TextComponent re_inst_txt1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $re_ins_text1
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    TextComponent text_4
      color = black
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 3
      text = (Press spacebar to continue)
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine check
    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Finally, answer the following question:
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 6
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      text:
        Which of the following backgrounds indicated the identity relationship:

        (Use the keyboard numbers for answering the question)
    ImageComponent id_image
      image = identity_bg.jpg
      size = (0.2, 0.2)
      startVal [time (s)] = 7
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    ImageComponent sp_image
      image = spatial_bg.jpg
      pos = (-.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 7
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    ImageComponent nt_image
      image = neutral02_bg.jpg
      pos = (.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 7
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    TextComponent l_arrow
      color = black
      letterHeight = 0.1
      pos = (-.4, -.2)
      startVal [time (s)] = 7
      text = 1
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    TextComponent d_arrow
      color = black
      letterHeight = 0.1
      pos = (0, -.2)
      startVal [time (s)] = 7
      text = 2
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    TextComponent r_arrow
      color = black
      letterHeight = 0.1
      pos = (.4, -.2)
      startVal [time (s)] = 7
      text = 3
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    KeyboardComponent numbers_bckgnd
      allowedKeys = '1','2','3'
      correctAns = 2
      forceEndRoutine = True
      startVal [time (s)] = 7
      storeCorrect = True
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Flow
  Routine welcome
  Routine walkthrough_inst
  LoopInitiator video_WT loopType="TrialHandler"
    conditionsFile = videoWT.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Seed': 1, 'Trial': 1, 'StimulusBackgroundWT': 'identity_bg.jpg', 'StimulusBDWT': 10, 'TextWT1': 'When the background is green, the stimuli presented before and after the crosshair is the same?', 'TextWTStart1': 0, 'TextWTDuration1': 10, 'videoWT': 'video/video-identity.mov', 'VideoWTStart': 10, 'VideoWTDuration': 16, 'TextWT2': 'Press the spacebar to continue', 'TextWT2Start': 26, 'key_respWTStart': 26},
      {'Seed': 2, 'Trial': 1, 'StimulusBackgroundWT': 'spatial_bg.jpg', 'StimulusBDWT': 10, 'TextWT1': 'When the background is red, the stimuli presented before and after the crosshair is in the same position?', 'TextWTStart1': 0, 'TextWTDuration1': 10, 'videoWT': 'video/video-identity.mov', 'VideoWTStart': 10, 'VideoWTDuration': 17, 'TextWT2': 'Press the spacebar to continue', 'TextWT2Start': 27, 'key_respWTStart': 26},
      {'Seed': 2, 'Trial': 1, 'StimulusBackgroundWT': 'identity_bg.jpg', 'StimulusBDWT': 10, 'TextWT1': 'When the background is green, the stimuli presented before and after the crosshair is the same?', 'TextWTStart1': 0, 'TextWTDuration1': 10, 'videoWT': 'video/video-identity.mov', 'VideoWTStart': 10, 'VideoWTDuration': 17, 'TextWT2': 'Press the spacebar to continue', 'TextWT2Start': 27, 'key_respWTStart': 26},
      {'Seed': 2, 'Trial': 1, 'StimulusBackgroundWT': 'spatial_bg.jpg', 'StimulusBDWT': 10, 'TextWT1': 'When the background is red, the stimuli presented before and after the crosshair is in the same position?', 'TextWTStart1': 0, 'TextWTDuration1': 10, 'videoWT': 'video/video-identity.mov', 'VideoWTStart': 10, 'VideoWTDuration': 16, 'TextWT2': 'Press the spacebar to continue', 'TextWT2Start': 26, 'key_respWTStart': 26}]
    Routine video
  LoopTerminator video_WT
  Routine Trial_Start
  LoopInitiator t_trials_cond loopType="TrialHandler"
    conditionsFile = t_cond.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'training_cond': 't01.xlsx'},
      {'training_cond': 't02.xlsx'},
      {'training_cond': 't03.xlsx'},
      {'training_cond': 't04.xlsx'},
      {'training_cond': 't05.xlsx'},
      {'training_cond': 't06.xlsx'},
      {'training_cond': 't07.xlsx'},
      {'training_cond': 't08.xlsx'}]
    LoopInitiator t_trials loopType="TrialHandler"
      conditionsFile = $training_cond
      loopType = random
      nReps = 1
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      Routine trial
      Routine feedback
      Routine it
    LoopTerminator t_trials
  LoopTerminator t_trials_cond
  Routine rest
  LoopInitiator re_instr loopType="TrialHandler"
    conditionsFile = re inst.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'re_ins_text1': 'Before starting, please remember:'},
      {'re_ins_text1': 'At the beginning of each trial the background will indicate the relationship between the stimuli:\n\nGreen = identity\nYellow = location\n\nIf the background is DIFFERENT, please do your best guess.'},
      {'re_ins_text1': 'Two more stimuli will be shown after the first one. \n\nPlease compare the first and the third one.'},
      {'re_ins_text1': 'You will not receive auditory feedback.'}]
    Routine re_inst
  LoopTerminator re_instr
  Routine Trial_Start
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Seed': 1, 'Trial': 1, 'Beginning_Background': 'identity_bg.jpeg', 'Beginning_Background_duration': 1, 'StimulusBackground': 'neutral01_bg.jpeg', 'StimulusBackgroundStart': 1, 'StimulusBackgroundDuration': 2, 'Stimulus': 'test/1130.png', 'StimulusStart': 1, 'StimulusDuration': 2, 'StimulusPosition': (0, 0), 'StimulusSize': (0.2, 0.2), 'DelayBackground': 'identity_bg.jpeg', 'DelayBackgroundStart': 3, 'DelayBackgroundDuration': 1, 'DelayStimulusBackground': 'neutral01_bg.jpeg', 'DelayStimulusBackgroundstart': 4, 'DelayStimulusBackgroundDuration': 2, 'DelayStimulus': 'crosshair.png', 'DelayStim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,
      {'Seed': 1, 'Trial': 2, 'Beginning_Background': 'identity_bg.jpeg', 'Beginning_Background_duration': 1, 'StimulusBackground': 'neutral01_bg.jpeg', 'StimulusBackgroundStart': 1, 'StimulusBackgroundDuration': 2, 'Stimulus': 'test/1136.png', 'StimulusStart': 1, 'StimulusDuration': 2, 'StimulusPosition': (0, 0), 'StimulusSize': (0.2, 0.2), 'DelayBackground': 'identity_bg.jpeg', 'DelayBackgroundStart': 3, 'DelayBackgroundDuration': 1, 'DelayStimulusBackground': 'neutral01_bg.jpeg', 'DelayStimulusBackgroundstart': 4, 'DelayStimulusBackgroundDuration': 2, 'DelayStimulus': 'crosshair.png', 'DelayStimu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,
      {'Seed': 1, 'Trial': 3, 'Beginning_Background': 'identity_bg.jpeg', 'Beginning_Background_duration': 1, 'StimulusBackground': 'neutral01_bg.jpeg', 'StimulusBackgroundStart': 1, 'StimulusBackgroundDuration': 2, 'Stimulus': 'test/1139.png', 'StimulusStart': 1, 'StimulusDuration': 2, 'StimulusPosition': (0, 0), 'StimulusSize': (0.2, 0.2), 'DelayBackground': 'identity_bg.jpeg', 'DelayBackgroundStart': 3, 'DelayBackgroundDuration': 1, 'DelayStimulusBackground': 'neutral01_bg.jpeg', 'DelayStimulusBackgroundstart': 4, 'DelayStimulusBackgroundDuration': 2, 'DelayStimulus': 'crosshair.png', 'DelayStimu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,
      {'Seed': 1, 'Trial': 4, 'Beginning_Background': 'identity_bg.jpeg', 'Beginning_Background_duration': 1, 'StimulusBackground': 'neutral01_bg.jpeg', 'StimulusBackgroundStart': 1, 'StimulusBackgroundDuration': 2, 'Stimulus': 'test/1140.png', 'StimulusStart': 1, 'StimulusDuration': 2, 'StimulusPosition': (0, 0), 'StimulusSize': (0.2, 0.2), 'DelayBackground': 'identity_bg.jpeg', 'DelayBackgroundStart': 3, 'DelayBackgroundDuration': 1, 'DelayStimulusBackground': 'neutral01_bg.jpeg', 'DelayStimulusBackgroundstart': 4, 'DelayStimulusBackgroundDuration': 2, 'DelayStimulus': 'crosshair.png', 'DelayStimu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
    Routine trial
    Routine it
  LoopTerminator test_trials
  Routine check
  Routine end
